PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'runID': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1024, 768]
  expName = random-dot-motion
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent problem0
      image = run1\figure0_0.jpg
      pos = (-4.5,0)
      size = (4, 4)
      startVal [time (s)] = 0.45
      stopVal [duration (s)] = 3
      units = deg
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    ImageComponent problem1
      image = run1\figure0_1.jpg
      size = (4, 4)
      startVal [time (s)] = 0.45
      stopVal [duration (s)] = 3
      units = deg
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    ImageComponent problem2
      image = run1\figure0_2.jpg
      pos = (4.5,0)
      size = (4, 4)
      startVal [time (s)] = 0.45
      stopVal [duration (s)] = 3
      units = deg
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    ImageComponent problem3
      disabled = True
      image = run1\figure0_3.jpg
      pos = (-4.5, 0)
      size = (4, 4)
      startVal [time (s)] = 5.40+rand_t1
      stopVal [duration (s)] = 3
      units = deg
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    ImageComponent problem4
      disabled = True
      image = run1\figure0_4.jpg
      size = (4, 4)
      startVal [time (s)] = 5.40+rand_t1
      stopVal [duration (s)] = 3
      units = deg
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    ImageComponent problem5
      disabled = True
      image = run1\figure0_6.jpg
      pos = (4.5, 0)
      size = (4,4)
      startVal [time (s)] = 5.40+rand_t1
      stopVal [duration (s)] = 3
      units = deg
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    ImageComponent problem6
      image = run1\figure0_3.jpg
      pos = (-4.5, 0)
      size = (4, 4)
      startVal [time (s)] = 5.40+rand_t1
      stopVal [duration (s)] = 3.0
      units = deg
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    ImageComponent problem7
      image = run1\figure0_4.jpg
      size = (4, 4)
      startVal [time (s)] = 5.40+rand_t1
      stopVal [duration (s)] = 3
      units = deg
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    ImageComponent answer
      image = figure8.jpg
      pos = (4.5, 0)
      size = (4, 4)
      startVal [time (s)] = 5.40+rand_t1
      stopVal [duration (s)] = 3
      units = deg
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        currentLoopNumber += 1
        #print('num:',run_num)
        #print('lst:',run_lst[run_num])
        #print(str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber]))
        problem0.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_0.jpg')
        problem1.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_1.jpg')
        problem2.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_2.jpg')
        #problem3.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_3.jpg')
        #problem4.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_4.jpg')
        #problem5.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_5.jpg')
        problem6.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_3.jpg')
        problem7.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_4.jpg')
        rand_t1 = int(time_lst[run_num,currentLoopNumber,0])*0.25
        rand_t2 = int(time_lst[run_num,currentLoopNumber,1])*0.25
        rand_idx = int(answer_lst[currentLoopNumber])
        #rand_t2 = 0

        answer1.setImage('run'+str(run_lst[run_num])+'/target'+str(idx_final[run_num,currentLoopNumber])+'_'+str(rand_idx)+'.jpg')
        answer2.setImage('run'+str(run_lst[run_num])+'/target'+str(idx_final[run_num,currentLoopNumber])+'_'+str(1-rand_idx)+'.jpg')
        #answer3.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_6.jpg')
        if rand_idx==0:
            corrAns='left'
        else:
            corrAns = 'right'
      Each Frame:
        #if problem0.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if problem3.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if problem6.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if answer1.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if len(_key_resp_allKeys):
        #    port.setData(respMark)
        #    core.wait(0.05)
        #    port.setData(0)
    ImageComponent answer1
      image = run1\target0_0.jpg
      pos = (-4.5, 0)
      size = (4, 4)
      startVal [time (s)] = $10.4+rand_t1+rand_t2
      stopVal [duration (s)] = 2
      units = deg
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    ImageComponent answer2
      image = run1\target0_0.jpg
      pos = (4.5, 0)
      size = (4, 4)
      startVal [time (s)] = $10.4+rand_t1+rand_t2
      stopVal [duration (s)] = 2
      units = deg
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    ImageComponent answer3
      disabled = True
      pos = (4.5, 0)
      size = (4, 4)
      startVal [time (s)] = $10.4+rand_t1+rand_t2
      stopVal [duration (s)] = 2
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $10.4+rand_t1+rand_t2
      stopVal [duration (s)] = 2
      storeCorrect = True
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    PolygonComponent fixation1
      disabled = True
      fillColor = burlywood
      lineColor = burlywood
      shape = circle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.45
      units = deg
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    PolygonComponent fixation2
      disabled = True
      fillColor = burlywood
      lineColor = burlywood
      shape = circle
      size = (0.20, 0.20)
      startVal [time (s)] = 3.45
      stopVal [duration (s)] = 4.95+rand_t1
      units = deg
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    PolygonComponent fixation3
      disabled = True
      fillColor = burlywood
      lineColor = burlywood
      shape = circle
      size = (0.20, 0.20)
      startVal [time (s)] = 8.4+rand_t1
      stopVal [duration (s)] = 4.95+rand_t2
      units = deg
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  Routine rest
    PolygonComponent fixation_1
      fillColor = crimson
      lineColor = crimson
      shape = circle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $1.75+randint (-1,2)*0.25
      units = deg
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        compensate_clock = core.Clock()
        compensate_clock.reset
  Routine end
    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.01
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  Routine start
    KeyboardComponent key_resp_3
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    ImageComponent start_image
      image = start.png
      size = (30,20)
      startVal [time (s)] = 0.0
      units = deg
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import parallel
        port = parallel.ParallelPort(address="0xD020")
        port.setData(0)
        startMark = 1
        endMark = 8
        stimMark = 2
        respMark = 4
        currentLoopNumber=-1
        totalRunTime = 9
        current_path = os.getcwd()  # 获取当前路径
        print(current_path)
        path = current_path + '\\' + expInfo['participant'] + 'run.txt'  # 在当前路径创建名为test的文本文件
        if os.path.exists(path):
            run_file = open(path, 'r+')
            run_num = int(expInfo['runID']) - 1
            run_lst = [int(i) for i in list(run_file.readline())[:-1]]
            idx_final = []
            for i in range(totalRunTime):
                idx_final.append([int(j) for j in run_file.readline().split(',')])
            idx_final = np.array(idx_final)
            time_lst = []
            for i in range(totalRunTime):
                time_lst.append([int(j) for j in run_file.readline().split(',')])
            time_lst = np.array(time_lst)
            time_lst = time_lst.reshape(totalRunTime, 18, 2)
            while True:
                line = run_file.readline()
                if line == '':
                    break
        #        run_num_orig = int(line)
        #    run_num=run_num_orig
        #    print(run_num_orig)

        else:
            # 初次运行，随机出题序
            run_num = 0
            run_num_orig = 0
            run_file = open(path, 'w')
            run_lst = np.arange(1, totalRunTime)
            np.random.shuffle(run_lst)
            run_file.writelines(''.join(str(i) for i in run_lst) + '\n')
            lst1 = []
            lst2 = []
            for i in range(18):
                if i % 2 == 0:
                    lst1.append(i)
                elif i % 2 == 1:
                    lst2.append(i)

            idx_lst = np.vstack([lst1, lst2])
            ## print(idx_lst)
            run0 = idx_lst.copy()
            idx_seq = [run0] * totalRunTime
            # print(idx_seq)
            idx_final = []
            for run_seq in idx_seq:
                #    # time.sleep(0.1)
                for i in run_seq[:, 0:run_seq.shape[1] - 1]:
                    #        x=1
                    np.random.shuffle(i)
                np.random.shuffle(run_seq)
                for i in range(1, run_seq.shape[0] - 1):
                    # print('?', run_seq[i, :][-1] // 5,run_seq[i+1,:][0]//5)
                    while (run_seq[i, :][-1] // 2) == (run_seq[i + 1, :][0] // 2) or (run_seq[i, :][0] // 2) == (
                            run_seq[i - 1, :][-1] // 2) \
                            or (max(run_seq[i, :][-1], run_seq[i + 1, :][0]) <= 4) or \
                            (max(run_seq[i, :][0], run_seq[i - 1, :][-1]) <= 4):
                        # print('?')
                        np.random.shuffle(run_seq[i, :])
                        for j in range(len(run_seq[i, :]) - 1):
                            #                    print(j,i)
                            if max(run_seq[i, j], run_seq[i, j + 1]) <= 4:
                                #                        print('**********************************************')
                                np.random.shuffle(run_seq[i, :])
                                break
                                # np.random.shuffle(run_seq[i,:])

                            # break
                # print('bef',run_seq)
                run_seq = np.array(run_seq)
                new_run = run_seq.reshape(1, -1)
                run_file.writelines(','.join(str(i) for i in new_run[0, :]) + '\n')
                idx_final.append(new_run[0, :])
                # print('aft',new_run)
            idx_final = np.array(idx_final)
            # run_file.writelines(','.join(str(i) for i in idx_final)+'\n')
            #    run_file.writelines(str(run_num)+'\n')
            time_lst = np.random.randint(-1, 2, 36 * totalRunTime).reshape(totalRunTime, 36)
            # print(time_lst)
            for line in time_lst:
                # break
                run_file.writelines(','.join(str(i) for i in line) + '\n')
            time_lst = time_lst.reshape(totalRunTime, 18, 2)
        answer_lst = np.concatenate([np.zeros(9), np.ones(9)], axis=0)
        np.random.shuffle(answer_lst)
      Begin Routine:
        if int(expInfo['runID'])==1:
            start_image.setImage('begin.png')
        else:
            start_image.setImage('rest.png')
      Each Frame:
        #if start_mark.status == STARTED:
        #    print("yes")
      End Routine:
        port.setData(startMark)
        core.wait(0.05)
        port.setData(0)
  Routine middle_rest
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #if problem0.status == STARTED:
        #    port.setData(endMark)
        #    core.wait(0.05)
        #    port.setData(0)

        conpensate_time = compensate_clock.getTime()%1.5
    PolygonComponent conpensate
      fillColor = crimson
      lineColor = crimson
      shape = circle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = conpensate_time
      units = deg
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  Routine routine_1
    ImageComponent image_3
      image = run1\figure0_0.jpg
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 18
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    Routine rest
    Routine trial
    Routine middle_rest
  LoopTerminator trials
