PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_Run%s_%s_%s' % (expInfo['participant'],expInfo['runID'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'runID': ''}
  Full-screen window = False
  Monitor = setMonitor
  Screen = 2
  Units = deg
  Window size (pixels) = [1024, 768]
  color = $[-1.0,-1.0,-1.0]
  expName = random-dot-motion
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent problem0
      image = run1\figure0_0.jpg
      pos = (-imgPixelHor-30,0)
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent problem1
      image = run1\figure0_1.jpg
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent problem2
      image = run1\figure0_2.jpg
      pos = (imgPixelHor+30, 0)
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent problem6
      image = run1\figure0_3.jpg
      pos = (-imgPixelHor-30,0)
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = 3.5+rand_t1
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent problem7
      image = run1\figure0_4.jpg
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = 3.5+rand_t1
      stopVal [duration (s)] = 2
      units = pix
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    ImageComponent answer
      image = figure8.jpg
      pos = (imgPixelHor+30, 0)
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = 3.5+rand_t1
      stopVal [duration (s)] = 2
      units = pix
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        currentLoopNumber += 1
        #print('num:',run_num)
        #print('lst:',run_lst[run_num])
        #print(str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber]))
        problem0.setImage('run'+str(run_lst[run_num])+'/figure'+str(idx_final[run_num,currentLoopNumber])+'_0.jpg')
        problem1.setImage('run'+str(run_lst[run_num])+'/figure'+str(idx_final[run_num,currentLoopNumber])+'_1.jpg')
        problem2.setImage('run'+str(run_lst[run_num])+'/figure'+str(idx_final[run_num,currentLoopNumber])+'_2.jpg')
        #problem3.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_3.jpg')
        #problem4.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_4.jpg')
        #problem5.setImage('run'+str(run_lst[run_num])+'_1\\figure'+str(idx_final[run_num,currentLoopNumber])+'_5.jpg')
        problem6.setImage('run'+str(run_lst[run_num])+'/figure'+str(idx_final[run_num,currentLoopNumber])+'_3.jpg')
        problem7.setImage('run'+str(run_lst[run_num])+'/figure'+str(idx_final[run_num,currentLoopNumber])+'_4.jpg')
        rand_t1 = int(time_lst[run_num,currentLoopNumber,0])*0.01
        rand_t2 = int(time_lst[run_num,currentLoopNumber,1])*0.01
        rand_idx = int(answer_lst[currentLoopNumber])
        #rand_t2 = 0

        answer1.setImage('run'+str(run_lst[run_num])+'/target'+str(idx_final[run_num,currentLoopNumber])+'_'+str(rand_idx)+'.jpg')
        answer2.setImage('run'+str(run_lst[run_num])+'/target'+str(idx_final[run_num,currentLoopNumber])+'_'+str(1-rand_idx)+'.jpg')
        #answer3.setImage('run'+str(run_lst[run_num])+'\\figure'+str(idx_final[run_num,currentLoopNumber])+'_6.jpg')
        if rand_idx==0:
            corrAns1='1'
            corrAns2='2'
        else:
            corrAns1='3'
            corrAns2='4'
        #if rand_idx==0:
        #    corrAns1='left'
        #
        #else:
        #    corrAns1='right'

        #fixOuterSize = int(pixelPerMilimeterHor * (2 * 1000 * tan(fixOuterAngle/180*pi/2)));
        #fixInnerSize = int(pixelPerMilimeterHor * (2 * 1000 * tan(fixInnerAngle/180*pi/2)));
      Each Frame:
        #if problem0.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if problem3.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if problem6.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if answer1.status == STARTED:
        #    port.setData(stimMark)
        #    core.wait(0.05)
        #    port.setData(0)
        #
        #if len(_key_resp_allKeys):
        #    port.setData(respMark)
        #    core.wait(0.05)
        #    port.setData(0)
    ImageComponent answer1
      image = run1\target0_0.jpg
      pos = (-imgPixelHor-30,0)
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = $6.5+rand_t1+rand_t2
      stopVal [condition] = key_resp.status == FINISHED
      units = pix
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    ImageComponent answer2
      image = run1\target0_0.jpg
      pos = (imgPixelHor+30, 0)
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = $6.5+rand_t1+rand_t2
      stopVal [condition] = key_resp.status == FINISHED
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = '1','3'
      correctAns = $corrAns1
      forceEndRoutine = True
      startVal [time (s)] = $6.5+rand_t1+rand_t2
      stopVal [duration (s)] = 2
      storeCorrect = True
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    PolygonComponent fixation2
      fillColor = white
      shape = cross
      size = (0.20, 0.20)
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 1+rand_t1
      units = deg
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    PolygonComponent fixation3
      fillColor = white
      shape = cross
      size = (0.20, 0.20)
      startVal [time (s)] = 5.5+rand_t1
      stopVal [duration (s)] = $1+rand_t2
      units = deg
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    KeyboardComponent key_resp_4
      allowedKeys = '2','4'
      correctAns = $corrAns2
      forceEndRoutine = True
      startVal [time (s)] = $6.5+rand_t1+rand_t2
      stopVal [duration (s)] = 2
      storeCorrect = True
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = deg
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    ImageComponent arrow
      image = newFixa.png
      size = (imgPixelHor,imgPixelVer)
      startVal [time (s)] = $6.5+rand_t1+rand_t2
      stopVal [condition] = key_resp.status == FINISHED
      units = pix
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    PolygonComponent fixation4
      disabled = True
      fillColor = white
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = $6.5+rand_t1+rand_t2
      stopVal [condition] = key_resp.status == FINISHED
      units = deg
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  Routine rest
    PolygonComponent fixation_1
      fillColor = white
      shape = circle
      size = (0.20, 0.20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = deg
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        compensate_clock = core.Clock()
        compensate_clock.reset
  Routine end
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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  Routine start
    KeyboardComponent key_resp_3
      allowedKeys = '3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    ImageComponent start_image
      image = begin.png
      size = (20,15)
      startVal [time (s)] = 0.0
      units = deg
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        #from psychopy import parallel
        #port = parallel.ParallelPort(address="0xD020")
        #port.setData(0)
        #startMark = 1
        #endMark = 8
        #stimMark = 2
        #respMark = 4
        every_run_num = 27
        currentLoopNumber=-1
        totalRunTime = 8
        current_path = os.getcwd()  # 获取当前路径
        #print(current_path)
        path = current_path + '/' + expInfo['participant'] + 'run.txt'  # 在当前路径创建名为run的文本文件
        if os.path.exists(path):
            run_file = open(path, 'r+')
            run_num = int(expInfo['runID']) - 1
            run_lst = [int(i) for i in list(run_file.readline())[:-1]]
            idx_final = []
            for i in range(totalRunTime):
                idx_final.append([int(j) for j in run_file.readline().split(',')])
            idx_final = np.array(idx_final)
            time_lst = []
            for i in range(totalRunTime):
                time_lst.append([int(j) for j in run_file.readline().split(',')])
            time_lst = np.array(time_lst)
            time_lst = time_lst.reshape(totalRunTime, every_run_num, 2)
            while True:
                line = run_file.readline()
                if line == '':
                    break
        #        run_num_orig = int(line)
        #    run_num=run_num_orig
        #    print(run_num_orig)

        else:
            # 初次运行，随机出题序
            run_num = 0

            run_file = open(path, 'w')
            run_lst = np.arange(1, totalRunTime+1) #生成runID的序列
            np.random.shuffle(run_lst)
            run_file.writelines(''.join(str(i) for i in run_lst) + '\n')
            lst1 = []
            lst2 = []
            lst3 = []
            for i in range(every_run_num):       #将每一个run的下标分成三组，每一组包含所有类
                if i % 3 == 0:
                    lst1.append(i)
                elif i % 3 == 1:
                    lst2.append(i)
                elif i%3==2:
                    lst3.append(i)

            idx_lst = np.vstack([lst1, lst2,lst3])#每一个lst是一类中的一个
            ## print(idx_lst)
            run0 = idx_lst.copy()                 #一个run的下标
            idx_seq = [run0] * totalRunTime       #所有run的下标
            # print(idx_seq)
            idx_final = []
            for run_seq in idx_seq:              #遍历每一个run
                #    # time.sleep(0.1)
                for i in run_seq[:, 0:run_seq.shape[1] - 1]:#每一个组打乱
                    #        x=1
                    np.random.shuffle(i)
                np.random.shuffle(run_seq)#每一个组序打乱
                for i in range(1, run_seq.shape[0] - 1):
                    # print('?', run_seq[i, :][-1] // 5,run_seq[i+1,:][0]//5)
                    while (run_seq[i, :][-1] // 3) == (run_seq[i + 1, :][0] // 3) or (run_seq[i, :][0] // 3) == (  #判断组之间有没有相同类
                            run_seq[i - 1, :][-1] // 3) \
                            or (max(run_seq[i, :][-1], run_seq[i + 1, :][0]) <= 6) or \
                            (max(run_seq[i, :][0], run_seq[i - 1, :][-1]) <= 6):                                   #判断组之间有没有同样的const
                        # print('?')
                        np.random.shuffle(run_seq[i, :])
                        for j in range(len(run_seq[i, :]) - 1):
                            #                    print(j,i)
                            if max(run_seq[i, j], run_seq[i, j + 1]) <= 6:
                                #                        print('**********************************************')
                                np.random.shuffle(run_seq[i, :])
                                break
                                # np.random.shuffle(run_seq[i,:])

                            # break
                # print('bef',run_seq)
                run_seq = np.array(run_seq)
                new_run = run_seq.reshape(1, -1)
                run_file.writelines(','.join(str(i) for i in new_run[0, :]) + '\n')
                idx_final.append(new_run[0, :])
                # print('aft',new_run)
            idx_final = np.array(idx_final)
            time_lst=[]
            for i in range(totalRunTime):
                # time_list.append(np.round(np.random.rand(1,every_run_num * 2),2))
                lst=np.hstack([np.arange(0,25),[1,2]])
                temp=np.hstack([lst,-lst])
                np.random.shuffle(temp)

                time_lst.append(temp)
            # print(np.mean(time_list[i]))
            time_lst=np.array(time_lst)
            for line in time_lst:
                # break
                run_file.writelines(','.join(str(i) for i in line) + '\n')
            time_lst = time_lst.reshape(totalRunTime, every_run_num, 2)
        if (int(expInfo['runID'])-1)%2==0:
            answer_lst = np.concatenate([np.zeros(int(every_run_num/2)+1), np.ones(int(every_run_num/2))], axis=0)
        else:
            answer_lst = np.concatenate([np.zeros(int(every_run_num/2)), np.ones(int(every_run_num/2)+1)], axis=0)
        np.random.shuffle(answer_lst)
        pixelPerMilimeterHor = 1024/390;
        pixelPerMilimeterVer = 768/295;
        imgAngle=4

        imgPixelHor = int(pixelPerMilimeterHor * (2 * 1100 * tan(imgAngle/180*pi/2)));
        imgPixelVer = int(pixelPerMilimeterVer * (2 * 1100 * tan(imgAngle/180*pi/2)));
        #print(imgPixelHor)
        #arrPixelhor = int(pixelPerMilimeterHor * (2 * 1100 * tan(imgAngle/180*pi/2)));
      Begin Routine:
        #if int(expInfo['runID'])==1:
        #    start_image.setImage('begin.png')
        #else:
        #    start_image.setImage('rest.png')
        mouse_2.setVisible(False)
      Each Frame:
        #if start_mark.status == STARTED:
        #    print("yes")
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine middle_rest
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #if problem0.status == STARTED:
        #    port.setData(endMark)
        #    core.wait(0.05)
        #    port.setData(0)
        conpensate_time = 10.5-rand_t1-rand_t2-compensate_clock.getTime()#keep total time same
    ImageComponent image_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conpensate_time
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conpensate_time
      units = deg
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  Routine routine_1
    KeyboardComponent key_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start
  Routine routine_1
  Routine end
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 27
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    Routine rest
    Routine trial
    Routine middle_rest
  LoopTerminator trials
  Routine end
